Journal
Description: Linking Python Script to Create Region on Processed Images returned from Python Bridge
Version VersionNumber=2.4
Disabled IfThenElse Expression=VariableExists(pulsetime)
  CodeBlock Condition=false
    Show Message and Wait
      nDisplay = 3
      iTimeout = 4
      bUseTimeout = TRUE
      stTitle = "Set Pulse Length "
      stMessage = "No Mosaic Pulse Length was established- \nExit Jounral/Playback"
      msgX = 542
      msgY = 258
    ExitPlayback

Disabled IfThenElse Expression=Screen.Status.WaveNum=1
  CodeBlock Condition=true
    Comment: Here we ensure we are keying on the first Wavelength to Control the targeting and names for the remainder of the Journal commands_
    name1 = Image.Name
    name2 = "Stream Max"

Disabled IfThenElse Expression=Screen.Status.WaveNum=2
  CodeBlock Condition=true
    Comment: Here we ensure we are keying on the first Wavelength to Control the targeting and names for the remainder of the Journal commands_
    Disabled name2 = Image.Name

IfThenElse Expression=Screen.Status.WaveNum=1
  CodeBlock Condition=true
    Disabled Image_Name = "Color_Combine" + "_" + str(image_num)
    Disabled Color Combine
      imRed = "%name2%"
      imGreen = "%name1%"
      imBlue = m 1 2 9 2 1 -1 -1 8 Untitled
      imStack = m 1 2 9 2 1 -1 -1 8 Untitled
      imDest = "%Image_Name%"
      imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
      bColorEncode = FALSE
      nSource = 1
      nResultDepth = 3
      bHueRendering = FALSE
    New_Image = Image.Name+ "_Binary"
    X = 0
    Run User Program
      stProgramName = "BridgeToPython.UserMethods"
      stCommandLine = "C:\MM\BridgeToPython\MM_rpyc_load_from_nas_new_gpu.py"
      bKeepInMemory = FALSE
    WhileLoop Expression=X=0
      X = ImageExists(New_Image)
    Comment: For Batch1 determine threshold
    Threshold Image
      srcThresh = "%New_Image%"
      min = 1
      max = 1
      bMore = FALSE
      idxState = 1
      nTab = 1
      nMinMaxRange = 1
      bTransparentThresh = FALSE
      dTransparencyPct = 0.5
      byThreshRed = 255
      byThreshGreen = 128
      byThreshBlue = 64
      nThreshDisplayMode = 1
    Create Regions Around Objects
      imSource = "%New_Image%"
    IfThenElse Expression=Image.NumRegions>=1
      CodeBlock Condition=true
        Save Regions
          stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
          saveImage = "%New_Image%"
        Disabled Clear All Regions
          clearImage = "%New_Image%"
        Target = 1
      CodeBlock Condition=false
        Target = 0
    Comment: Run Pulse Mosaic Singel Batch ROI
    IfThenElse Expression=Target=1
      CodeBlock Condition=true
        current_illumination = Device.Illumination.Setting
        Clear All Regions
          clearImage = m 1 5 9 0 1 -1 -1 8 Untitled
        Disabled Load Regions
          stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
          openImage = m 1 5 9 0 1 -1 -1 8 Untitled
        Transfer Regions
          imSourceImage = "%New_Image%"
          imDestImage = m 1 5 9 0 1 -1 -1 8 Untitled
          nRegionSel = 2
          bSrcClear = FALSE
          bDstClear = FALSE
        Targeted Illumination Update Mask
          PositionSetting = 3
        Disabled RunJournal JournalName=C:\MM\app\mmproc\journals\Mosaic journals\Load Batch 1 ROIs.JNL
        Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Mosaic SpecX" Override=None OverrideVariable=Setting Name
        Targeted Illumination
          IlluminationSetting = "Mosaic SpecX" Override=None OverrideVariable=Illumination setting
          ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
          CoordinateSetting = "20X APO" Override=Variable OverrideVariable=Device.Magnification.Setting
          PositionSetting = 3 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
          PositionImageCoordinatesX = 100 Override=None OverrideVariable=Position: image coordinate X
          PositionImageCoordinatesY = 100 Override=None OverrideVariable=Position: image coordinate Y
          NumberOfLaserFires = 1 Override=None OverrideVariable=Number of laser pulses
          NeutralDensitySetting = 5 Override=None OverrideVariable=Attenuator plate: % transmission
          dExpDurMS = 200 Override=Variable OverrideVariable=pulsetime
          PointSize = 1 Override=None OverrideVariable=Point size
        Delay
          dpDelayTime = 100 Override=Variable OverrideVariable=pulsetime
          nDelayUnits = 1
        Clear All Regions
          clearImage = m 1 5 9 0 1 -1 -1 8 Untitled
    Clear All Regions
      clearImage = "%New_Image%"
    Comment: 2nd batch targeting
    IfThenElse Expression=VariableExists(pulsetime2)
      CodeBlock Condition=true
        Threshold Image
          srcThresh = "%New_Image%"
          min = 2
          max = 2
          bMore = FALSE
          idxState = 1
          nTab = 1
          nMinMaxRange = 1
          bTransparentThresh = FALSE
          dTransparencyPct = 0.5
          byThreshRed = 255
          byThreshGreen = 128
          byThreshBlue = 64
          nThreshDisplayMode = 1
        Create Regions Around Objects
          imSource = "%New_Image%"
        IfThenElse Expression=Image.NumRegions>=1
          CodeBlock Condition=true
            Save Regions
              stFilename = "C:\MM\regions\Batch 2 ROI Targeting.rgn"
              saveImage = "%New_Image%"
            Disabled Clear All Regions
              clearImage = "%New_Image%"
            Target = 1
          CodeBlock Condition=false
            Target = 0
        Comment: Run Pulse Mosaic Singel Batch ROI
        IfThenElse Expression=Target=1
          CodeBlock Condition=true
            current_illumination = Device.Illumination.Setting
            Clear All Regions
              clearImage = m 1 5 9 0 1 -1 -1 8 Untitled
            Disabled Load Regions
              stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
              openImage = m 1 5 9 0 1 -1 -1 8 Untitled
            Transfer Regions
              imSourceImage = "%New_Image%"
              imDestImage = m 1 5 9 0 1 -1 -1 8 Untitled
              nRegionSel = 2
              bSrcClear = FALSE
              bDstClear = FALSE
            Targeted Illumination Update Mask
              PositionSetting = 3
            Disabled RunJournal JournalName=C:\MM\app\mmproc\journals\Mosaic journals\Load Batch 1 ROIs.JNL
            Select Illumination
              bUseLegacyDelay = FALSE
              cMillisecDelay = 100
              stSetting = "Mosaic SpecX" Override=None OverrideVariable=Setting Name
            Targeted Illumination
              IlluminationSetting = "Mosaic SpecX" Override=None OverrideVariable=Illumination setting
              ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
              CoordinateSetting = "20X APO" Override=Variable OverrideVariable=Device.Magnification.Setting
              PositionSetting = 3 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
              PositionImageCoordinatesX = 100 Override=None OverrideVariable=Position: image coordinate X
              PositionImageCoordinatesY = 100 Override=None OverrideVariable=Position: image coordinate Y
              NumberOfLaserFires = 1 Override=None OverrideVariable=Number of laser pulses
              NeutralDensitySetting = 5 Override=None OverrideVariable=Attenuator plate: % transmission
              dExpDurMS = 200 Override=Variable OverrideVariable=pulsetime2
              PointSize = 1 Override=None OverrideVariable=Point size
            Delay
              dpDelayTime = 100 Override=Variable OverrideVariable=pulsetime2
              nDelayUnits = 1
            Clear All Regions
              clearImage = m 1 5 9 0 1 -1 -1 8 Untitled
        Clear All Regions
          clearImage = "%New_Image%"
    Comment: 3rd batch targeting
    IfThenElse Expression=VariableExists(pulsetime3)
      CodeBlock Condition=true
        Threshold Image
          srcThresh = "%New_Image%"
          min = 3
          max = 3
          bMore = FALSE
          idxState = 1
          nTab = 1
          nMinMaxRange = 1
          bTransparentThresh = FALSE
          dTransparencyPct = 0.5
          byThreshRed = 255
          byThreshGreen = 128
          byThreshBlue = 64
          nThreshDisplayMode = 1
        Create Regions Around Objects
          imSource = "%New_Image%"
        IfThenElse Expression=Image.NumRegions>=1
          CodeBlock Condition=true
            Disabled Clear All Regions
              clearImage = "%New_Image%"
            Save Regions
              stFilename = "C:\MM\regions\Batch 3 ROI Targeting.rgn"
              saveImage = "%New_Image%"
            Target = 1
          CodeBlock Condition=false
            Target = 0
        IfThenElse Expression=Target=1
          CodeBlock Condition=true
            current_illumination = Device.Illumination.Setting
            Clear All Regions
              clearImage = m 1 5 9 0 1 -1 -1 8 Untitled
            Disabled Load Regions
              stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
              openImage = m 1 5 9 0 1 -1 -1 8 Untitled
            Transfer Regions
              imSourceImage = "%New_Image%"
              imDestImage = m 1 5 9 0 1 -1 -1 8 Untitled
              nRegionSel = 2
              bSrcClear = FALSE
              bDstClear = FALSE
            Targeted Illumination Update Mask
              PositionSetting = 3
            Disabled RunJournal JournalName=C:\MM\app\mmproc\journals\Mosaic journals\Load Batch 2 ROIs.JNL
            Select Illumination
              bUseLegacyDelay = FALSE
              cMillisecDelay = 100
              stSetting = "Mosaic SpecX" Override=None OverrideVariable=Setting Name
            Targeted Illumination
              IlluminationSetting = "Mosaic SpecX" Override=None OverrideVariable=Illumination setting
              ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
              CoordinateSetting = "20X APO" Override=Variable OverrideVariable=Device.Magnification.Setting
              PositionSetting = 3 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
              PositionImageCoordinatesX = 100 Override=None OverrideVariable=Position: image coordinate X
              PositionImageCoordinatesY = 100 Override=None OverrideVariable=Position: image coordinate Y
              NumberOfLaserFires = 1 Override=None OverrideVariable=Number of laser pulses
              NeutralDensitySetting = 5 Override=None OverrideVariable=Attenuator plate: % transmission
              dExpDurMS = 800 Override=Variable OverrideVariable=pulsetime3
              PointSize = 1 Override=None OverrideVariable=Point size
            Delay
              dpDelayTime = 100 Override=Variable OverrideVariable=pulsetime3
              nDelayUnits = 1
            Clear All Regions
              clearImage = m 1 5 9 0 1 -1 -1 8 Untitled
            Clear All Regions
              clearImage = "%New_Image%"
      CodeBlock Condition=false
        Disabled Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera NIR" Override=Variable OverrideVariable=current_illumination
        Disabled ExitPlayback
    Disabled Select Illumination
      bUseLegacyDelay = FALSE
      cMillisecDelay = 100
      stSetting = "Camera RFP_532x_Post" Override=Variable OverrideVariable=current_illumination
    Comment: 4th batch targeting
    IfThenElse Expression=VariableExists(pulsetime4)
      CodeBlock Condition=true
        Threshold Image
          srcThresh = "%New_Image%"
          min = 4
          max = 4
          bMore = FALSE
          idxState = 1
          nTab = 1
          nMinMaxRange = 1
          bTransparentThresh = FALSE
          dTransparencyPct = 0.5
          byThreshRed = 255
          byThreshGreen = 128
          byThreshBlue = 64
          nThreshDisplayMode = 1
        Create Regions Around Objects
          imSource = "%New_Image%"
        IfThenElse Expression=Image.NumRegions>=1
          CodeBlock Condition=true
            Disabled Clear All Regions
              clearImage = "%New_Image%"
            Save Regions
              stFilename = "C:\MM\regions\Batch 4 ROI Targeting.rgn"
              saveImage = "%New_Image%"
            Target = 1
          CodeBlock Condition=false
            Target = 0
        IfThenElse Expression=Target=1
          CodeBlock Condition=true
            current_illumination = Device.Illumination.Setting
            Clear All Regions
              clearImage = m 1 5 9 0 1 -1 -1 8 Untitled
            Disabled Load Regions
              stFilename = "C:\MM\regions\Batch 1 ROI Targeting.rgn"
              openImage = m 1 5 9 0 1 -1 -1 8 Untitled
            Transfer Regions
              imSourceImage = "%New_Image%"
              imDestImage = m 1 5 9 0 1 -1 -1 8 Untitled
              nRegionSel = 2
              bSrcClear = FALSE
              bDstClear = FALSE
            Targeted Illumination Update Mask
              PositionSetting = 3
            Disabled RunJournal JournalName=C:\MM\app\mmproc\journals\Mosaic journals\Load Batch 2 ROIs.JNL
            Select Illumination
              bUseLegacyDelay = FALSE
              cMillisecDelay = 100
              stSetting = "Mosaic SpecX" Override=None OverrideVariable=Setting Name
            Targeted Illumination
              IlluminationSetting = "Mosaic SpecX" Override=None OverrideVariable=Illumination setting
              ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
              CoordinateSetting = "20X APO" Override=Variable OverrideVariable=Device.Magnification.Setting
              PositionSetting = 3 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
              PositionImageCoordinatesX = 100 Override=None OverrideVariable=Position: image coordinate X
              PositionImageCoordinatesY = 100 Override=None OverrideVariable=Position: image coordinate Y
              NumberOfLaserFires = 1 Override=None OverrideVariable=Number of laser pulses
              NeutralDensitySetting = 5 Override=None OverrideVariable=Attenuator plate: % transmission
              dExpDurMS = 800 Override=Variable OverrideVariable=pulsetime4
              PointSize = 1 Override=None OverrideVariable=Point size
            Delay
              dpDelayTime = 100 Override=Variable OverrideVariable=pulsetime4
              nDelayUnits = 1
            Clear All Regions
              clearImage = m 1 5 9 0 1 -1 -1 8 Untitled
            Clear All Regions
              clearImage = "%New_Image%"
      CodeBlock Condition=false
        Disabled Select Illumination
          bUseLegacyDelay = FALSE
          cMillisecDelay = 100
          stSetting = "Camera NIR" Override=Variable OverrideVariable=current_illumination
        Disabled ExitPlayback
    Disabled Select Illumination
      bUseLegacyDelay = FALSE
      cMillisecDelay = 100
      stSetting = "Camera RFP_532x_Post" Override=Variable OverrideVariable=current_illumination
    Toggle Shutter
      iSetTo = 2
    Close
      im = "%New_Image%"
      bSaveIt = FALSE
    Disabled Close
      im = "Color_Combine_0"
      bSaveIt = FALSE
    Disabled Close
      im = "Stream Max"
      bSaveIt = FALSE
