Journal
Description: Startup journal for experiment on 9-12-18. Defines well_number (start at 1, step up after each well). NOTE that pulsetime and pulsetime2 are switched from attempt 1; thus switching which population is which.
Version VersionNumber=2.4
Screen.Status.Path = "Y:\2023\Hyeon-Jin\10-02-23_F1-E11-12-SC35-plate5-B04"
Screen.Status.BaseName = "10-02-23_F1-E11-12-SC35-plate5-B04"
LeicaZPos = Component.Leica_Z_Motor.Position
LeicaZStartPos = Component.Leica_Z_Motor.Position
well_num = 0
site_num = 0
image_num = 0
Assign Variable
  size_dilate = 0
Assign Variable
  Component.405_Laser_Power.Position = 256
pulsetime = 50
pulsetime2 = 175
pulsetime3 = 610
pulsetime4 = 2100
Total_Regions = 0
Select Focus Device
  stNewDev = "ASI Piezo Z"
  stGUID = ""
Set Home
  bUseRecordedPosition = FALSE
  dPosition = 0
Device.Focus.Top = Device.Focus.Home + 1.5
Device.Focus.Bottom = Device.Focus.Home - 1.5
Select Focus Device
  stNewDev = "Leica Z Motor"
  stGUID = ""
Send Serial Data
  stData = "48023  \x0D"
  bSendWithEcho = FALSE
  lTimeout = 2
Wait for Serial Data
  stData2 = "48023 \n"
  lTimeout2 = 0
  bLog = TRUE
  stLogFormat = "$"
AFCPOS = MID(SerialData.DataIn, 7, 8)
Disabled AFCPOS2 = "10910"
Disabled Send Serial Data
  stData = "48043 1 %AFCPOS2%  \x0D"
  bSendWithEcho = FALSE
  lTimeout = 2
Start Continuous Focusing
  m_dpRange = 0
