Journal
Description: For acquring z-stacks for VCS (end of site)
Version VersionNumber=2.4

Comment: Turn autofocus off and acquire z-stacks using Piezo Z
Camera.Digital.Exposure = 180
Select Focus Device
  stNewDev = "Leica Z Motor"
  stGUID = ""
Stop Continuous Focusing
Select Focus Device
  stNewDev = "ASI Piezo Z"
  stGUID = ""
Configure Stream Acquisition
  nStreamFrames = 6
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 0
  nStreamClear = 0
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 200
  bStreamUsesFocusMotor = TRUE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 2
  stIllumination = "Camera DAPI" "" "" ""
  stShutterName = "Camera NIR"
  stDiskFilename = ""
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = FALSE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = FALSE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 0
  aiSpecStartFrame = 
  aiSpecFrequency = 
  aiSpecNumber = 
  astSpecComponent = 
  adSpecPosition = 
  aiSpecPin = 
Start Stream Acquisition
  imNew = m 1 2 9 2 1 -1 -1 8 Untitled

Comment: Define image save path
Disabled Screen.Status.Path = "F:\2022\test"
Disabled Screen.Status.Path = "Y:\2022\Hyeon-Jin\test"
Disabled Screen.Status.BaseName = "test"
Path1_Zed = Screen.Status.Path+"\"+ Screen.Status.BaseName +"_"+Screen.Status.WellName + "_s"+str(Screen.Status.SiteNum)+"_"+Device.Illumination.Setting +"_"+"ZStream.TIF"
Disabled Path2_Max = Screen.Status.Path+"\"+ Screen.Status.BaseName +"_"+Screen.Status.WellName + "_s"+str(Screen.Status.SiteNum)+"_"+ Device.Illumination.Setting +"_"+"ZMax.TIF"


Comment: Save the stack and Max Z
Select Image
  im = "Stream"
  prompt = ""
Disabled LeicaZPos = Component.Leica_Z_Motor.Position
Disabled Image.ZAbsolute = Component.Leica_Z_Motor.Position
Image.FilePath = Path1_Zed
Disabled Stack Arithmetic
  iOperation = 3
  imStack = "Stream"
  imResult = "Stream Max"
Disabled Select Image
  im = m 1 7 9 0 1 7 0 6 Stream
  prompt = ""
Disabled Image.ZAbsolute = LeicaZPos
Disabled Image.FilePath = Path2_Max
Disabled Save
  imSave = m 1 7 9 0 1 7 0 6 Stream
  nParm = 2
Save
  imSave = "Stream"
  nParm = 2
Close
  im = "Stream"
  bSaveIt = FALSE
Disabled Close
  im = "Stream Max"
  bSaveIt = FALSE


Comment: Go to Home (defined z on Piezo Z) and start autofocus
Go To Home
Disabled Delay
  dpDelayTime = 100
  nDelayUnits = 1
Select Focus Device
  stNewDev = "Leica Z Motor"
  stGUID = ""
Send Serial Data
  stData = "48043 1 %AFCPOS%  \x0D"
  bSendWithEcho = FALSE
  lTimeout = 2


